#  Example Qudi configuration file.
#  The recommended path for user specific files is C:\Users\<user_name>\qudi\config

global:
    # list of modules to load when starting
    startup_modules: []

    # Module server configuration for accessing qudi GUI/logic/hardware modules from remote clients
    remote_modules_server:
        address: 'localhost'
        port: 12345

    # Server port for serving the active qudi module namespace locally (localhost).
    # Used by e.g. the Qudi jupyter kernel.
    namespace_server_port: 18861

    # If this flag is set (True), all arguments passed to qudi module APIs from remote
    # (jupyter notebook, qudi console, remote modules) will be wrapped and passed "per value"
    # (serialized and de-serialized). This is avoiding a lot of inconveniences with using numpy in
    # remote clients.
    # If you do not want to use this workaround and know what you are doing, you can disable this
    # feature by setting this flag to False.
    force_remote_calls_by_value: True

    # Qss stylesheet for controlling the appearance of the GUIs.
    # Absolute path or relative to qudi.artwork.styles
    stylesheet: 'qdark.qss'

    # Default root directory for measurement data storage. All eventual data sub-directories should
    # be contained within this directory. This is not enforced, just convention.
    # The fallback directory is <user home>/qudi/Data/
    # default_data_dir: C:\Users\neverhorst\qudi\Data

    # Save data to daily data sub-directories by default
    daily_data_dirs: True

gui:
    time_series_gui:
        module.Class: 'time_series.time_series_gui.TimeSeriesGui'
        options:
            use_antialias: True  # optional, set to False if you encounter performance issues
        connect:
            _time_series_logic_con: time_series_reader_logic

    scanner_gui:
        module.Class: 'scanning.scannergui.ScannerGui'
        options:  
            image_axes_padding: 0.02
            default_position_unit_prefix: null  # optional, use unit prefix characters, e.g. 'u' or 'n'
            optimizer_plot_dimensions: [2,1]
        connect:
            scanning_logic: scanning_probe_logic
            data_logic: scanning_data_logic
            optimize_logic: scanning_optimize_logic


logic:
    time_series_reader_logic:
        module.Class: 'time_series_reader_logic.TimeSeriesReaderLogic'
        options:
            max_frame_rate: 20  # optional (default: 20Hz)
            channel_buffer_size: 1048576  # optional (default: 1MSample)
            max_raw_data_bytes: 1073741824  # optional (default: 1GB)
        connect:
            streamer: ni_instreamer

    scanning_probe_logic:
        module.Class: 'scanning_probe_logic.ScanningProbeLogic'
        options:  
            max_history_length: 20
            max_scan_update_interval: 2
            position_update_interval: 1
        connect:
            scanner: ni_scanner

    scanning_data_logic:
        module.Class: 'scanning_data_logic.ScanningDataLogic'
        options:  
            max_history_length: 20
        connect:
            scan_logic: scanning_probe_logic

    scanning_optimize_logic:
        module.Class: 'scanning_optimize_logic.ScanningOptimizeLogic'
        connect:
            scan_logic: scanning_probe_logic


hardware:
    # Configure the NI USB-6453 for time series data acquisition
    ni_instreamer:
        module.Class: 'ni_x_series.ni_x_series_in_streamer.NIXSeriesInStreamer'
        options:
            device_name: 'Dev1'
            digital_sources:  # Configure digital input channels for time series
                - 'PFI0'  # Counter input
                - 'PFI8'  # Additional digital input if needed
            analog_sources:  # Configure analog input channels for time series
                - 'ai0'
                - 'ai14'
            channel_units:
                'PFI0': 'c/s'  # Counts per second for counter input
                'PFI8': 'c/s'  # Counts per second for additional digital input
                'ai0': 'V'     # Voltage for analog input
                'ai14': 'V'     # Voltage for additional analog input
            sample_rate: 100000  # 100 kS/s sampling rate
            buffer_size: 1000000  # Buffer size in samples
            # external_sample_clock_source: '/Dev1/PFI12'  # Uncomment if using external clock
            # external_sample_clock_frequency: 100000  # Uncomment if using external clock
            adc_voltage_range: [-10, 10]  # Set voltage range for analog inputs
            max_channel_samples_buffer: 10000000  # Maximum buffer size
            read_write_timeout: 10  # Timeout in seconds
            
    # Configure NI USB-6453 for scanning probe functionality
    ni_scanner:
        module.Class: 'interfuse.ni_scanning_probe_interfuse.NiScanningProbeInterfuse'
        connect:
            scan_hardware: 'ni_io'
            analog_output: 'ni_ao'
        options:  
            ni_channel_mapping:
                x: 'ao0'
                y: 'ao1'
                z: 'ao2'
                APD1: 'PFI0'
                APD2: 'PFI8'
                AI0: 'ai0'
                fluorescence: 'ai14'
            position_ranges: # in m
                x: [0, 200e-6]
                y: [0, 200e-6]
                z: [-100e-6, 100e-6]
            frequency_ranges:
                x: [1, 5000]
                y: [1, 5000]
                z: [1, 1000]
            resolution_ranges:
                x: [1, 10000]
                y: [1, 10000]
                z: [1, 10000]
            input_channel_units:
                APD1: 'c/s'
                APD2: 'c/s'
                AI0: 'V'
                fluorescence: 'c/s'
            backwards_line_resolution: 50 # optional
            maximum_move_velocity: 400e-6 #m/s
            
    # Configure NI USB-6453 for finite sampling I/O
    ni_io:
        module.Class: 'ni_x_series.ni_x_series_finite_sampling_io.NIXSeriesFiniteSamplingIO'
        options:
            device_name: 'Dev1'
            input_channel_units:  # optional
                PFI0: 'c/s'
                PFI8: 'c/s'
                ai0: 'V'
                ai14: 'V'
            output_channel_units:
                'ao0': 'V'
                'ao1': 'V'
                'ao2': 'V'
            adc_voltage_ranges:
                ai0: [-10, 10]
                ai14: [-10, 10]
            output_voltage_ranges:
                ao0: [-10, 10]
                ao1: [-10, 10]
                ao2: [0, 10] # 0 to 10 V gives 0 to 450 um in closed loop for Thorlabs PFM450E
            frame_size_limits: [1, 1e9]  # optional
            output_mode: 'JUMP_LIST' # optional, must be name of SamplingOutputMode
            read_write_timeout: 10  # optional
            
    # Configure NI USB-6453 for analog output
    ni_ao:
        module.Class: 'ni_x_series.ni_x_series_analog_output.NIXSeriesAnalogOutput'
        options:
            device_name: 'Dev1'
            channels:
                ao0:
                    limits: [-10.0, 10.0]
                    keep_value: True
                ao1:
                    limits: [-10.0, 10.0]
                    keep_value: True
                ao2:
                    limits: [-10.0, 10.0]
                    keep_value: True
                ao3:
                    limits: [-10.0, 10.0]
                    keep_value: True